PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = ClosedLoopParticipant
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-0.067, -0.122, -0.122]
  expName = ANT_Test_2.0
  logging level = debug
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Routines
  Routine Fixation_Prac
    CodeComponent Prac_Jitter
      Code Type = Auto->JS
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      Begin Routine:
        prac_jitter = np.random.choice(np.arange(.4, 1.6, .1))
        prac_jitter2 = 4- prac_jitter
    ImageComponent PFixation_jitter
      image [set every repeat] = $Prac_Fixation
      interpolate = nearest
      size = [.5,.5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $prac_jitter
      texture resolution = 512
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  Routine Feedback
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if PracKey.corr:#stored on last run routine
          msg="Correct! RT=%.3f" %(PracKey.rt)
        else:
          msg="Oops! That was wrong"
    TextComponent Feedback_screen
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $msg
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  Routine Instructions_1
    TextComponent Instructions
      letterHeight = .05
      startVal [time (s)] = 0.0
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      text:
        This is an experiment investigating attention. You will be shown an arrow on the screen pointing either to the left or to the right.

        (for example > or < )

        On some trials, the arrow will be flanked by two arrows to the left and two arrows to the right.

        (for example >>>>> or >><>>)

        Your task is to respond to the direction of the CENTRAL arrow.

        Press 'Spacebar' to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_2
    TextComponent Instructions2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You should press the left arrow key if the central arrow points to the left or the right arrow key if the central arrow points to the right.

        Please make your response as quickly and accurately as possible. Your reaction time and accuracy will be recorded.

        Press 'Spacebar' to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_3
    TextComponent Instructions3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        There will be a cross ("+") in the center of the screen and the arrows will appear either above or below the cross.

        You should try to fixate on the cross throughout the experiment.

        Press 'Spacebar' to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Prac_FixCue
    CodeComponent PJitter
      Code Type = Auto->JS
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      Begin Routine:
        jitter = np.random.choice(np.arange(.4, 1.6, .1))
        jitter2 = jitter + .5
        jitter3 = 4-jitter
    ImageComponent Prac_Fixation
      image [set every repeat] = $PFixation
      interpolate = nearest
      pos [set every repeat] = $(PFixation_LocationX,PFixation_LocationY)
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter2
      texture resolution = 512
      units = degFlat
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    ImageComponent Prac_Cue1
      image [set every repeat] = $PCue1
      interpolate = nearest
      pos [set every repeat] = $(PCue1_LocationX,PCue1_LocationY)
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = degFlat
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    ImageComponent Prac_Cue2
      image [set every repeat] = $PCue2
      interpolate = nearest
      pos [set every repeat] = $(PCue2_LocationX,PCue2_LocationY)
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = degFlat
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  Routine Exp_FixCue
    ParallelOutComponent trialStartPort
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 4
      syncScreen = True
      syncScreenRefresh = False
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    CodeComponent EJitter
      Code Type = Auto->JS
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      Begin Routine:
        jitter = np.random.choice(np.arange(1.4, 2.6, .1))
        jitter2 = jitter + 1
    ImageComponent Exp_Fixation
      image [set every repeat] = $Fixation
      interpolate = nearest
      pos [set every repeat] = $(Fixation_LocationX,Fixation_LocationY)
      size = (1,1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $jitter2
      texture resolution = 512
      units = degFlat
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    ImageComponent Exp_Cue1
      image [set every repeat] = $Cue1
      interpolate = nearest
      pos [set every repeat] = $(Cue1_LocationX,Cue1_LocationY)
      size = (1,1)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = degFlat
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    ImageComponent Exp_Cue2
      image [set every repeat] = $Cue2
      interpolate = nearest
      pos [set every repeat] = $(Cue2_LocationX,Cue2_LocationY)
      size = (1,1)
      startVal [time (s)] = $jitter
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = degFlat
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    ParallelOutComponent cuePort
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = $jitter
      stopData = 0
      stopVal [duration (frames)] = 6
      syncScreen = True
      syncScreenRefresh = False
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  Routine Prac_Trial
    ImageComponent Prac_Fixation2
      image [set every repeat] = $PFixation
      interpolate = nearest
      pos [set every repeat] = $(PFixation_LocationX,PFixation_LocationY)
      saveStartStop = False
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter3
      texture resolution = 512
      units = degFlat
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    ImageComponent PracTarget
      image [set every repeat] = $PTarget_Arrow
      interpolate = nearest
      pos [set every repeat] = $(PTarget_Arrow_LocationX,PTarget_Arrow_LocationY)
      saveStartStop = False
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    ImageComponent PracFlanker1
      image [set every repeat] = $PFlanker1
      interpolate = nearest
      pos [set every repeat] = $(PFlanker1_LocationX,PFlanker1_LocationY)
      saveStartStop = False
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    ImageComponent PracFlanker2
      image [set every repeat] = $PFlanker2
      interpolate = nearest
      pos [set every repeat] = $(PFlanker2_LocationX,PFlanker2_LocationY)
      saveStartStop = False
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    ImageComponent PracFlanker3
      image [set every repeat] = $PFlanker3
      interpolate = nearest
      pos [set every repeat] = $(PFlanker3_LocationX,PFlanker3_LocationY)
      saveStartStop = False
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    ImageComponent PracFlanker4
      image [set every repeat] = $PFlanker4
      interpolate = nearest
      pos [set every repeat] = $(PFlanker4_LocationX,PFlanker4_LocationY)
      saveStartStop = False
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    KeyboardComponent PracKey
      allowedKeys = 'left','right'
      correctAns = $Correct
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = .4
      store = first key
      storeCorrect = True
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  Routine Exp_Trial
    ImageComponent Exp_Fixation2
      image [set every repeat] = $Fixation
      interpolate = nearest
      pos [set every repeat] = $(Fixation_LocationX,Fixation_LocationY)
      size = (1,1)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = degFlat
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    ImageComponent Exp_Target
      image [set every repeat] = $Target_Arrow
      interpolate = nearest
      pos [set every repeat] = $(Target_Arrow_LocationX,Target_Arrow_LocationY)
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    ImageComponent Exp_Flanker1
      image [set every repeat] = $Flanker1
      interpolate = nearest
      pos [set every repeat] = $(Flanker1_LocationX,Flanker1_LocationY)
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    ImageComponent Exp_Flanker2
      image [set every repeat] = $Flanker2
      interpolate = nearest
      pos [set every repeat] = $(Flanker2_LocationX,Flanker2_LocationY)
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    ImageComponent Exp_Flanker3
      image [set every repeat] = $Flanker3
      interpolate = nearest
      pos [set every repeat] = $(Flanker3_LocationX,Flanker3_LocationY)
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    ImageComponent Exp_Flanker4
      image [set every frame] = $Flanker4
      interpolate = nearest
      pos [set every repeat] = $(Flanker4_LocationX,Flanker4_LocationY)
      size = (.55,.55)
      startVal [time (s)] = .4
      stopVal [duration (s)] = 1.7
      texture resolution = 512
      units = degFlat
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    KeyboardComponent ExpResp
      allowedKeys = 'left','right'
      correctAns = $Correct
      forceEndRoutine = True
      startVal [time (s)] = .416
      storeCorrect = True
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    ParallelOutComponent targetPort
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = 0.4
      stopData = 0
      stopVal [duration (frames)] = 1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Break
    TextComponent Break_Slide
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You are on a break between blocks. Please wait and the experimenter will start the next block after a few seconds. 
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    KeyboardComponent key_resp
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 5
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        if Blocks.thisN == 2:
            continueRoutine = False
  Routine EndStudy
    TextComponent EndofStudy
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The study is over. Thank you for participating!
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    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 1
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  Routine Instructions_5
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The experiment contains four blocks. The first block is for practice and takes about two minutes. The other three blocks are experimental blocks and each takes about five minutes.

        After each block there will be a message "take a break" and you may take a short rest.  After it, you can press the space bar to begin the next block.  The whole experiment takes about twenty minutes.

        If you have any questions, please ask the experimenter.

        Press 'Spacebar' to start the practice trials.
    KeyboardComponent key_resp_7
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions_4
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On some trials there will be * cues indicating when or where the arrow will occur. If the cue is at the center or both above and below fixation it indicates that the arrow will appear shortly.

        If the cue is only above or below fixation it indicates both that the trial will occur shortly and where it will occur.

        Try to maintain fixation at all times.  However, you may attend when and where indicated by the cues.

        Press 'Spacebar' to continue.
    KeyboardComponent key_resp_8
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ping
    ParallelOutComponent responsePort
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 8
      syncScreen = False
      syncScreenRefresh = False
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    ImageComponent fixationEnd
      image [set every repeat] = $Fixation
      interpolate = nearest
      pos [set every repeat] = $(Fixation_LocationX,Fixation_LocationY)
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      texture resolution = 512
      units = degFlat
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  Routine startProbe
    ParallelOutComponent p_port
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 30
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent image
      image = images/Fixation.png
      interpolate = nearest
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 31
      units = degFlatPos
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  Routine startExp
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
         Remember to respond ONLY to the middle arrow. Also, please make your response as quickly and accurately as possible. Your reaction time and accuracy will be recorded.

        Hit 'Spacebar' to start the experiment.
    KeyboardComponent key_resp_5
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine endPrac
    TextComponent text_4
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Practice is over. Please get the experimenter.
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    KeyboardComponent key_resp_9
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine deleteme
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = You Responded (1sec)
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  Routine deleteme2
    TextComponent text_6
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = The ping was fired (1s)
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Flow
  Routine Instructions_1
  Routine Instructions_2
  Routine Instructions_3
  Routine Instructions_4
  Routine Instructions_5
  LoopInitiator Prac loopType="TrialHandler"
    conditionsFile = ANT_TrialSheet_Prac.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Trial', 1), ('PFixation', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PFixation_LocationX', 0), ('PFixation_LocationY', 0), ('PCue1', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PCue1_LocationX', 0), ('PCue1_LocationY', 0.0), ('PCue2', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PCue2_LocationX', 0), ('PCue2_LocationY', 0.0), ('PTrial_Type', 'Congruent'), ('PTarget_Arrow', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Right_Arrow.png'), ('PTarget_Arrow_LocationX', 0), ('PTarg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,
      OrderedDict([('Trial', 2), ('PFixation', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PFixation_LocationX', 0), ('PFixation_LocationY', 0), ('PCue1', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PCue1_LocationX', 0), ('PCue1_LocationY', 0.0), ('PCue2', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PCue2_LocationX', 0), ('PCue2_LocationY', 0.0), ('PTrial_Type', 'Congruent'), ('PTarget_Arrow', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Left_Arrow.png'), ('PTarget_Arrow_LocationX', 0), ('PTarget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,
      OrderedDict([('Trial', 3), ('PFixation', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PFixation_LocationX', 0), ('PFixation_LocationY', 0), ('PCue1', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PCue1_LocationX', 0), ('PCue1_LocationY', 0.0), ('PCue2', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PCue2_LocationX', 0), ('PCue2_LocationY', 0.0), ('PTrial_Type', 'Incongruent'), ('PTarget_Arrow', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Right_Arrow.png'), ('PTarget_Arrow_LocationX', 0), ('PTar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,
      OrderedDict([('Trial', 4), ('PFixation', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PFixation_LocationX', 0), ('PFixation_LocationY', 0), ('PCue1', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PCue1_LocationX', 0), ('PCue1_LocationY', 0.0), ('PCue2', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('PCue2_LocationX', 0), ('PCue2_LocationY', 0.0), ('PTrial_Type', 'Incongruent'), ('PTarget_Arrow', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Left_Arrow.png'), ('PTarget_Arrow_LocationX', 0), ('PTarg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
    Routine Prac_FixCue
    Routine Prac_Trial
    Routine Feedback
  LoopTerminator Prac
  Routine endPrac
  Routine startExp
  Routine startProbe
  LoopInitiator Blocks loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator Trials loopType="TrialHandler"
      conditionsFile = ANT_TrialSheet.csv
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('Trial', 1), ('cueType', 'None'), ('Fixation', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Fixation_LocationX', 0), ('Fixation_LocationY', 0), ('Cue1', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Cue1_LocationX', 0), ('Cue1_LocationY', 0.0), ('Cue2', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Cue2_LocationX', 0), ('Cue2_LocationY', 0.0), ('Trial_Type', 'Congruent'), ('Target_Arrow', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Right_Arrow.png'), ('Target_Arrow_LocationX', 0)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,
        OrderedDict([('Trial', 2), ('cueType', 'None'), ('Fixation', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Fixation_LocationX', 0), ('Fixation_LocationY', 0), ('Cue1', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Cue1_LocationX', 0), ('Cue1_LocationY', 0.0), ('Cue2', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Cue2_LocationX', 0), ('Cue2_LocationY', 0.0), ('Trial_Type', 'Congruent'), ('Target_Arrow', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Left_Arrow.png'), ('Target_Arrow_LocationX', 0), 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,
        OrderedDict([('Trial', 3), ('cueType', 'None'), ('Fixation', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Fixation_LocationX', 0), ('Fixation_LocationY', 0), ('Cue1', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Cue1_LocationX', 0), ('Cue1_LocationY', 0.0), ('Cue2', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Cue2_LocationX', 0), ('Cue2_LocationY', 0.0), ('Trial_Type', 'Incongruent'), ('Target_Arrow', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Right_Arrow.png'), ('Target_Arrow_LocationX', 0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,
        OrderedDict([('Trial', 4), ('cueType', 'None'), ('Fixation', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Fixation_LocationX', 0), ('Fixation_LocationY', 0), ('Cue1', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Cue1_LocationX', 0), ('Cue1_LocationY', 0.0), ('Cue2', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Fixation.png'), ('Cue2_LocationX', 0), ('Cue2_LocationY', 0.0), ('Trial_Type', 'Incongruent'), ('Target_Arrow', 'C:\\Users\\CogNeW\\Desktop\\Tasks\\MXAttn\\ANT\\images\\Left_Arrow.png'), ('Target_Arrow_LocationX', 0)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
      Routine Exp_FixCue
      Routine Exp_Trial
      Routine ping
    LoopTerminator Trials
    Routine Break
  LoopTerminator Blocks
  Routine EndStudy
