PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['participant'], expName, expInfo['run'], expInfo['date'])
  Experiment info = {'participant': '', 'run': ''}
  Full-screen window = True
  Monitor = ClosedLoopParticipant
  Screen = 2
  Units = height
  Window size (pixels) = [2560, 1440]
  color = $[-0.067, -0.122, -0.122]
  expName = PVT
  logging level = debug
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Routines
  Routine trial
    CodeComponent Jitter
      Code Type = Auto->JS
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      Begin Routine:
        jitter = np.random.choice(np.arange(2, 10, .1))

        if trials.thisN == 0: # only on the first trial
            startTime = globalClock.getTime()
      End Routine:
        if globalClock.getTime() - startTime >= 600:
            trials.finished = True
            continueRoutine = False
    ImageComponent Fixation_Jitter
      image = Stimuli/Fixation.png
      interpolate = nearest
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $jitter
      texture resolution = 512
      units = degFlatPos
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    KeyboardComponent Response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 5
      stopVal [duration (s)] = $jitter
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    ParallelOutComponent trialStartPort
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 4
      syncScreen = True
      syncScreenRefresh = False
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  Routine End
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = The experiment is over. 
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  Routine feedback
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if Response.rt < jitter:#stored on last run routine
            msg="Oops! You responded too early. Remember only respond when the red circle appears."
        else:
            continueRoutine = False
    TextComponent Feedback_screen
      letterHeight = .1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $msg
    ParallelOutComponent incorrectRespPort1
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 8
      syncScreen = False
      syncScreenRefresh = False
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    ParallelOutComponent incorrectRespPort2
      address = 0x03FF8
      startData = 255
      startVal [frame N] = 16
      stopData = 0
      stopVal [duration (frames)] = 8
      syncScreen = False
      syncScreenRefresh = False
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  Routine ITI
    ImageComponent Fixation_ITI
      image = Stimuli/Fixation.png
      interpolate = nearest
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = degFlatPos
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  Routine trial_prac
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        jitter_prac = np.random.choice(np.arange(2, 10, .1))
    ImageComponent prac_fixation_jitter
      image = Stimuli/Fixation.png
      interpolate = nearest
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $jitter_prac
      texture resolution = 512
      units = degFlatPos
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    ImageComponent target_prac
      image = Stimuli/Response_Target.png
      interpolate = nearest
      size = (1, 1)
      startVal [time (s)] = $jitter_prac
      texture resolution = 512
      units = degFlatPos
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    KeyboardComponent key_resp_prac
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback_prac
    CodeComponent code_3
      Code Type = Py
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      Begin Experiment:
        #msg variable just needs some value at start
        msg=''
      Begin Routine:
        if key_resp_prac.rt < jitter_prac:#stored on last run routine
          msg="Oops! You responded too early. Remember only respond when the red circle appears."
        else:
            continueRoutine = False
    TextComponent feedback_screen_prac
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $msg
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  Routine ITI_prac
    ImageComponent image
      image = Stimuli/Fixation.png
      interpolate = nearest
      size = (1,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      texture resolution = 512
      units = degFlatPos
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  Routine Instructions
    TextComponent text_2
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        You are about to take part in an experiment that requires you to attending to a stimuli on a screen.

        Your task is to press the ‘Spacebar’ whenever you see a red circle on the screen. Do not press any keys when the fixation cross ‘+’ is on the screen. We will first do 5 practice trials, press ‘Spacebar’ when ready.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Start_Experiment
    TextComponent text_3
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = We will now start the experimental trials. Remember to only respond to the red circle with ‘Spacebar’. Press ’Spacebar’ to start the experiment.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ping
    ParallelOutComponent p_port
      address = 0xCFF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.01
      syncScreen = False
      syncScreenRefresh = False
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  Routine ping_2
    ParallelOutComponent correctRespPort
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 8
      syncScreen = False
      syncScreenRefresh = False
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    ImageComponent fixationPort3
      image = Stimuli/Fixation.png
      interpolate = nearest
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 10
      units = degFlatPos
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        if Response.rt < jitter:
            continueRoutine = False
        else:
            continueRoutine = True
  Routine response
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        if Response.rt < jitter:#stored on last run routine
            continueRoutine = False
        else:
            continueRoutine = True
    ImageComponent image_3
      image = Stimuli/Response_Target.png
      interpolate = nearest
      size = (1, 1)
      startVal [time (s)] = 0.0
      units = degFlatPos
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 1
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    ParallelOutComponent targetPort
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 1
      syncScreen = True
      syncScreenRefresh = False
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  Routine firstPulse
    ParallelOutComponent p_port_2
      address = 0x03FF8
      startData = 255
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (frames)] = 30
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent image_2
      image = Stimuli/Fixation.png
      interpolate = nearest
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (frames)] = 31
      units = degFlatPos
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  Routine pracEnd
    TextComponent text_4
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      text = Practice is over. Please tell the experimenter. 
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    KeyboardComponent key_resp_4
      allowedKeys = 'z'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator practice loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial_prac
    Routine feedback_prac
    Routine ITI_prac
  LoopTerminator practice
  Routine pracEnd
  Routine Start_Experiment
  Routine firstPulse
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 500
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    Routine trial
    Routine response
    Routine ping_2
    Routine feedback
    Routine ITI
  LoopTerminator trials
  Routine End
